PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Esperimento Mamma
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Fixation_Cross
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    TextComponent PrimeWords
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $Prime
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    TextComponent Target_words
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text [set every repeat] = $Target
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'p','q'
      correctAns = $Response
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Intro
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hi!
        This is a lexical decision task. You are supposed to state whether the words you see in ALL CAPS are actual English words or not.

        If you think the string is a word, press the key Q.
        If you think it is NOT a real word, press the key P.

        Thank you!!

        --> Press the space bar to start
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine FixCross
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    TextComponent Fix_Cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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Flow
  Routine Intro
  Routine FixCross
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = PrimingPilota_prova.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Trial': 1, 'Prime': 'Libro', 'Target': 'STATUE', 'Condition': 'Distractor-Unrelated', 'Response': 'q'},
      {'Trial': 2, 'Prime': 'Scuola', 'Target': 'TEACHER', 'Condition': 'Distractor-Related', 'Response': 'q'},
      {'Trial': 3, 'Prime': 'Tavolo', 'Target': 'TYLOF', 'Condition': 'Distractor-Nonword', 'Response': 'p'},
      {'Trial': 4, 'Prime': 'Studente', 'Target': 'STREET', 'Condition': 'Distractor-Unrelated', 'Response': 'q'},
      {'Trial': 5, 'Prime': 'Spaghetti', 'Target': 'FLICKIVE', 'Condition': 'Distractor-Nonword', 'Response': 'p'}]
    Routine Fixation_Cross
  LoopTerminator trials
  LoopInitiator Loop_ListA loopType="TrialHandler"
    conditionsFile = PrimingPilota_ListaA.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Trial': 1, 'Prime': 'Verde', 'Target': 'PARENT', 'Condition': 'Distractor-Unrelated', 'Response': 'q'},
      {'Trial': 2, 'Prime': 'Città', 'Target': 'VILLAGE', 'Condition': 'Distractor-Related', 'Response': 'q'},
      {'Trial': 3, 'Prime': 'Ecologia', 'Target': 'EIPERTOR', 'Condition': 'Distractor-Nonword', 'Response': 'p'},
      {'Trial': 4, 'Prime': 'Persona', 'Target': 'VASE', 'Condition': 'Distractor-Unrelated', 'Response': 'q'},
      {'Trial': 5, 'Prime': 'Casa', 'Target': 'POLINKHAUSIVE', 'Condition': 'Distractor-Nonword', 'Response': 'p'},
      {'Trial': 6, 'Prime': 'Edificio', 'Target': 'HOUSE', 'Condition': 'Target-Related', 'Response': 'q'},
      {'Trial': 7, 'Prime': 'Tecnologia', 'Target': 'HAROCELE', 'Condition': 'Distractor-Nonword', 'Response': 'p'},
      {'Trial': 8, 'Prime': 'Mangiare', 'Target': 'RESTAURANT', 'Condition': 'Distractor-Related', 'Response': 'q'},
      {'Trial': 9, 'Prime': 'Clima', 'Target': 'SUSPOKERTELL', 'Condition': 'Distractor-Nonword', 'Response': 'p'},
      {'Trial': 10, 'Prime': 'Azienda agricola', 'Target': 'CULTIVATION', 'Condition': 'Target-Related', 'Response': 'q'},
      {'Trial': 11, 'Prime': 'Cibo', 'Target': 'ENTIONOGY', 'Condition': 'Distractor-Nonword', 'Response': 'p'},
      {'Trial': 12, 'Prime': 'Problemi', 'Target': 'COMPLICATION', 'Condition': 'Distractor-Related', 'Response': 'q'},
      {'Trial': 13, 'Prime': 'Inquinamento', 'Target': 'SOFA', 'Condition': 'Target-Unrelated', 'Response': 'q'},
      {'Trial': 14, 'Prime': 'Plastica', 'Target': 'DOPITURE', 'Condition': 'Distractor-Nonword', 'Response': 'p'}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
    Routine Fixation_Cross
  LoopTerminator Loop_ListA
